---
API: 3
OpenSesame: 4.1.0
Platform: nt
---
set width 1024
set title consent
set subject_parity even
set subject_nr 0
set start main
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend osweb
set round_decimals 2
set mouse_backend osweb
set keyboard_backend osweb
set jatos_uuid "60ffb7fa-68ae-13ee-93d5-b07564076105"
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic False
set font_family mono
set font_bold False
set experiment_path None
set disable_garbage_collection True
set description "The main experiment item"
set color_backend osweb
set clock_backend osweb
set canvas_backend osweb
set background "#3d3846"

define inline_html consent_html
	__html__
	<p align="left">
	您好：<br>
	歡迎您參加{{實驗室名稱}}{{實驗室主持人}}的{{研究計畫標題}}，這項研究的目的是探索華語母語者如何閱讀句子及辨識物件圖像。只要您是透過上架本次實驗的網站平台登入這個網頁，且未曾參與相同主題的實驗，就適合參與本次研究，無其它限制或配合事項。本次研究預計招募人數為{{sample size}}人。
	</p>
	<p align="left">
	實驗過程完全在自用個人電腦的網頁瀏覽器進行。過程是{{過程說明}}。只要您在精神良好的狀態下參與這項實驗，不會對您的身心健康構成任何已知風險，如果您突然感到不適或被嚴重干擾，覺得無法繼續實驗，直接關閉視窗即可停止。本研究依前述程序執行，過程中您的所在地點除可預期之不良事件外，若因參與本研究而發生不良事件或損害，由慈濟大學或計畫主持人依法負補償責任。
	</p>
	<p align="left">
	開始實驗後，您若對指示或刺激項目感到不理解，可隨時註記並於平台的回饋欄位內反應。如果您中途想要退出，直接關閉網頁即可，網站不會保留您的參與紀錄，亦不影響之後您參與我們其他研究的權益。過程中若因意外因素(如電腦當機、網路斷線)導致中斷，只要再次登入網頁重新開始即可。實驗完成時您將看到完成代碼，請正確記下並於平台指定欄位內回報，成功回報我們會向平台方確認核發報酬，再請您依平台網站指示領取及使用報酬點數100元。如果實驗中途中止或回報錯誤代碼，請恕我們無法核發報酬。實驗網站不會記錄任何可辨識您個人身分的必要訊息，未來本研究材料及去除您個人資訊的反應資料將以CC授權模式(姓名標示─非商業性)無限期公開於學術網路平台Open Science Framework，提供全球有興趣的各界人士自由檢索，以及依指定的CC授權模式使用。
	</p>
	<p align="left">
	您的參與將幫助我們增加理解{{研究主題普名}}，也可能啟發您對相關研究主題的興趣。按鍵確認同意參與後，個人資料保護法等法規保障依然有效。如果您需要留存參與紀錄，請務必注意登出畫面的資訊。若您對本研究還有進一步疑問，歡迎您隨時連絡計畫主持人{{PI contact info}}
	</p>
	<p align="left">
	註：本研究已經過{{IRB title}}審查通過。如果研究過程中有任何疑問，可以直接詢問研究人員，亦可與{{IRB title}}聯絡請求諮詢，其電話號碼為：{{IRB contact info}}。
	</p>
	
	<center>
	<table>
	  <tr>
	    <td>
	       <input type='radio' id="opt1" name="response" value='Y' required> 
	       <label>同意參與</label> 
	    </td> 
	    <td>
	    &nbsp;&nbsp;&nbsp;&nbsp;&nbsp;&nbsp;&nbsp;&nbsp;&nbsp;&nbsp;&nbsp; 
	    </td>
	    <td>
	       <input type='radio' id="opt2" name="response" value='N'>      
	       <label>不願意參與</label> 
	    </td>
	  </tr>
	</table>
	<input type="submit" value="點此繼續">
	</center>
	
	<script>
	
	
	</script>
	__end__
	set description "Embeds custom HTML"

define notepad getting_started
	__note__
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	__end__
	set description "A simple notepad to document your experiment. This plug-in does nothing."

define sequence main
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run getting_started True
	run consent_html True
	run test_logger True

define logger test_logger
	set description "Logs experimental data"
	set auto_log yes

