---
API: 3
OpenSesame: 4.1.0
Platform: nt
---
set width 1024
set title "Need for Cognition"
set subject_parity even
set subject_nr 0
set start survey
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend osweb
set round_decimals 2
set mouse_backend osweb
set keyboard_backend osweb
set jatos_uuid "42775462-9954-9f81-a335-15873378d24a"
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic False
set font_family mono
set font_bold False
set experiment_path "D:\\core\\Research\\projects\\Scripts_Factory\\1_Templates\\NfC"
set disable_garbage_collection True
set description "The main experiment item"
set color_backend osweb
set clock_backend osweb
set canvas_backend osweb
set background "#3d3846"

define sketchpad End
	set start_response_interval no
	set reset_variables no
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=32 html=yes show_if=True text="<i>調查結束</i><br><br><br>請按空白鍵繼續" x=0 y=0 z_index=0

define inline_html basic_survey_html
	__html__
	<style>
	  .question {
	    margin-bottom: 1em;
	  }
	  .likert-scale {
	    display: flex;
	    justify-content: space-between;
	    list-style-type: none;
	    padding: 0;
	  }
	  .likert-item {
	    text-align: center;
	  }
	</style>
	
	<div class="question">
	    <p>1. 我比較喜歡複雜而不喜歡簡單的問題。</p>
	    <ul class="likert-scale">
	        <li class="likert-item"><input type="radio" name="q0" value="0" required> 非常不符合</li>
	        <li class="likert-item"><input type="radio" name="q0" value="1"></li>
	        <li class="likert-item"><input type="radio" name="q0" value="2"></li>
	        <li class="likert-item"><input type="radio" name="q0" value="3"></li>
	        <li class="likert-item"><input type="radio" name="q0" value="4"></li>
	        <li class="likert-item"><input type="radio" name="q0" value="5"> 非常符合</li>
	    </ul>
	</div>
	<div class="question">
	    <p>2. 我願意負責解決要花很多腦筋的事。</p>
	    <ul class="likert-scale">
	        <li class="likert-item"><input type="radio" name="q1" value="0" required> 非常不符合</li>
	        <li class="likert-item"><input type="radio" name="q1" value="1"></li>
	        <li class="likert-item"><input type="radio" name="q1" value="2"></li>
	        <li class="likert-item"><input type="radio" name="q1" value="3"></li>
	        <li class="likert-item"><input type="radio" name="q1" value="4"></li>
	        <li class="likert-item"><input type="radio" name="q1" value="5"> 非常符合</li>
	    </ul>
	</div>
	<div class="question">
	    <p>3. 我不以思考為樂。</p>
	    <ul class="likert-scale">
	        <li class="likert-item"><input type="radio" name="q2" value="0" required> 非常不符合</li>
	        <li class="likert-item"><input type="radio" name="q2" value="1"></li>
	        <li class="likert-item"><input type="radio" name="q2" value="2"></li>
	        <li class="likert-item"><input type="radio" name="q2" value="3"></li>
	        <li class="likert-item"><input type="radio" name="q2" value="4"></li>
	        <li class="likert-item"><input type="radio" name="q2" value="5"> 非常符合</li>
	    </ul>
	</div>
	<div class="question">
	    <p>4. 我比較喜歡去做不用思考的事,而不願去做需要思考的事。</p>
	    <ul class="likert-scale">
	        <li class="likert-item"><input type="radio" name="q3" value="0" required> 非常不符合</li>
	        <li class="likert-item"><input type="radio" name="q3" value="1"></li>
	        <li class="likert-item"><input type="radio" name="q3" value="2"></li>
	        <li class="likert-item"><input type="radio" name="q3" value="3"></li>
	        <li class="likert-item"><input type="radio" name="q3" value="4"></li>
	        <li class="likert-item"><input type="radio" name="q3" value="5"> 非常符合</li>
	    </ul>
	</div>
	<div class="question">
	    <p>5. 我對那些要花很多心思去想事情的情境,避之唯恐不及。</p>
	    <ul class="likert-scale">
	        <li class="likert-item"><input type="radio" name="q4" value="0" required> 非常不符合</li>
	        <li class="likert-item"><input type="radio" name="q4" value="1"></li>
	        <li class="likert-item"><input type="radio" name="q4" value="2"></li>
	        <li class="likert-item"><input type="radio" name="q4" value="3"></li>
	        <li class="likert-item"><input type="radio" name="q4" value="4"></li>
	        <li class="likert-item"><input type="radio" name="q4" value="5"> 非常符合</li>
	    </ul>
	</div>
	<div class="question">
	    <p>6. 我從深思和長考中得到滿足。</p>
	    <ul class="likert-scale">
	        <li class="likert-item"><input type="radio" name="q5" value="0" required> 非常不符合</li>
	        <li class="likert-item"><input type="radio" name="q5" value="1"></li>
	        <li class="likert-item"><input type="radio" name="q5" value="2"></li>
	        <li class="likert-item"><input type="radio" name="q5" value="3"></li>
	        <li class="likert-item"><input type="radio" name="q5" value="4"></li>
	        <li class="likert-item"><input type="radio" name="q5" value="5"> 非常符合</li>
	    </ul>
	</div>
	<div class="question">
	    <p>7. 我不費心去多想。</p>
	    <ul class="likert-scale">
	        <li class="likert-item"><input type="radio" name="q6" value="0" required> 非常不符合</li>
	        <li class="likert-item"><input type="radio" name="q6" value="1"></li>
	        <li class="likert-item"><input type="radio" name="q6" value="2"></li>
	        <li class="likert-item"><input type="radio" name="q6" value="3"></li>
	        <li class="likert-item"><input type="radio" name="q6" value="4"></li>
	        <li class="likert-item"><input type="radio" name="q6" value="5"> 非常符合</li>
	    </ul>
	</div>
	<div class="question">
	    <p>8. 與其去想一些長期計劃,我寧願想一些小的日常計劃。 </p>
	    <ul class="likert-scale">
	        <li class="likert-item"><input type="radio" name="q7" value="0" required> 非常不符合</li>
	        <li class="likert-item"><input type="radio" name="q7" value="1"></li>
	        <li class="likert-item"><input type="radio" name="q7" value="2"></li>
	        <li class="likert-item"><input type="radio" name="q7" value="3"></li>
	        <li class="likert-item"><input type="radio" name="q7" value="4"></li>
	        <li class="likert-item"><input type="radio" name="q7" value="5"> 非常符合</li>
	    </ul>
	</div>
	<div class="question">
	    <p>9. 我喜歡那些一旦學會就不用再想的工作。</p>
	    <ul class="likert-scale">
	        <li class="likert-item"><input type="radio" name="q8" value="0" required> 非常不符合</li>
	        <li class="likert-item"><input type="radio" name="q8" value="1"></li>
	        <li class="likert-item"><input type="radio" name="q8" value="2"></li>
	        <li class="likert-item"><input type="radio" name="q8" value="3"></li>
	        <li class="likert-item"><input type="radio" name="q8" value="4"></li>
	        <li class="likert-item"><input type="radio" name="q8" value="5"> 非常符合</li>
	    </ul>
	</div>
	<div class="question">
	    <p>10. 靠著思考去往上爬的想法正合我意。</p>
	    <ul class="likert-scale">
	        <li class="likert-item"><input type="radio" name="q9" value="0" required> 非常不符合</li>
	        <li class="likert-item"><input type="radio" name="q9" value="1"></li>
	        <li class="likert-item"><input type="radio" name="q9" value="2"></li>
	        <li class="likert-item"><input type="radio" name="q9" value="3"></li>
	        <li class="likert-item"><input type="radio" name="q9" value="4"></li>
	        <li class="likert-item"><input type="radio" name="q9" value="5"> 非常符合</li>
	    </ul>
	</div>
	<div class="question">
	    <p>11. 我喜歡那些需要想出新的方法來解決問題的工作。</p>
	    <ul class="likert-scale">
	        <li class="likert-item"><input type="radio" name="q10" value="0" required> 非常不符合</li>
	        <li class="likert-item"><input type="radio" name="q10" value="1"></li>
	        <li class="likert-item"><input type="radio" name="q10" value="2"></li>
	        <li class="likert-item"><input type="radio" name="q10" value="3"></li>
	        <li class="likert-item"><input type="radio" name="q10" value="4"></li>
	        <li class="likert-item"><input type="radio" name="q10" value="5"> 非常符合</li>
	    </ul>
	</div>
	<div class="question">
	    <p>12. 學習新的思考方式沒有甚麼意思。</p>
	    <ul class="likert-scale">
	        <li class="likert-item"><input type="radio" name="q11" value="0" required> 非常不符合</li>
	        <li class="likert-item"><input type="radio" name="q11" value="1"></li>
	        <li class="likert-item"><input type="radio" name="q11" value="2"></li>
	        <li class="likert-item"><input type="radio" name="q11" value="3"></li>
	        <li class="likert-item"><input type="radio" name="q11" value="4"></li>
	        <li class="likert-item"><input type="radio" name="q11" value="5"> 非常符合</li>
	    </ul>
	</div>
	<div class="question">
	    <p>13. 我願我這一生充滿著我必須解決的難題。</p>
	    <ul class="likert-scale">
	        <li class="likert-item"><input type="radio" name="q12" value="0" required> 非常不符合</li>
	        <li class="likert-item"><input type="radio" name="q12" value="1"></li>
	        <li class="likert-item"><input type="radio" name="q12" value="2"></li>
	        <li class="likert-item"><input type="radio" name="q12" value="3"></li>
	        <li class="likert-item"><input type="radio" name="q12" value="4"></li>
	        <li class="likert-item"><input type="radio" name="q12" value="5"> 非常符合</li>
	    </ul>
	</div>
	<div class="question">
	    <p>14. 我喜歡抽象地思考。</p>
	    <ul class="likert-scale">
	        <li class="likert-item"><input type="radio" name="q13" value="0" required> 非常不符合</li>
	        <li class="likert-item"><input type="radio" name="q13" value="1"></li>
	        <li class="likert-item"><input type="radio" name="q13" value="2"></li>
	        <li class="likert-item"><input type="radio" name="q13" value="3"></li>
	        <li class="likert-item"><input type="radio" name="q13" value="4"></li>
	        <li class="likert-item"><input type="radio" name="q13" value="5"> 非常符合</li>
	    </ul>
	</div>
	<div class="question">
	    <p>15. 我喜歡需要動腦筋且困難的重要工作,而不喜歡還算重要但不需多想的工作。</p>
	    <ul class="likert-scale">
	        <li class="likert-item"><input type="radio" name="q14" value="0" required> 非常不符合</li>
	        <li class="likert-item"><input type="radio" name="q14" value="1"></li>
	        <li class="likert-item"><input type="radio" name="q14" value="2"></li>
	        <li class="likert-item"><input type="radio" name="q14" value="3"></li>
	        <li class="likert-item"><input type="radio" name="q14" value="4"></li>
	        <li class="likert-item"><input type="radio" name="q14" value="5"> 非常符合</li>
	    </ul>
	</div>
	<div class="question">
	    <p>16. 當我完成一件很費心力的工作後,我感到的是解脫而不是滿足。</p>
	    <ul class="likert-scale">
	        <li class="likert-item"><input type="radio" name="q15" value="0" required> 非常不符合</li>
	        <li class="likert-item"><input type="radio" name="q15" value="1"></li>
	        <li class="likert-item"><input type="radio" name="q15" value="2"></li>
	        <li class="likert-item"><input type="radio" name="q15" value="3"></li>
	        <li class="likert-item"><input type="radio" name="q15" value="4"></li>
	        <li class="likert-item"><input type="radio" name="q15" value="5"> 非常符合</li>
	    </ul>
	</div>
	<div class="question">
	    <p>17. 我只在乎工作是否完成,我不在意 它是如何或爲何做成的。</p>
	    <ul class="likert-scale">
	        <li class="likert-item"><input type="radio" name="q16" value="0" required> 非常不符合</li>
	        <li class="likert-item"><input type="radio" name="q16" value="1"></li>
	        <li class="likert-item"><input type="radio" name="q16" value="2"></li>
	        <li class="likert-item"><input type="radio" name="q16" value="3"></li>
	        <li class="likert-item"><input type="radio" name="q16" value="4"></li>
	        <li class="likert-item"><input type="radio" name="q16" value="5"> 非常符合</li>
	    </ul>
	</div>
	<div class="question">
	    <p>18. 即使一些事務跟我個人沒有切身關係,我常會去對它們深思熟慮一番。</p>
	    <ul class="likert-scale">
	        <li class="likert-item"><input type="radio" name="q17" value="0" required> 非常不符合</li>
	        <li class="likert-item"><input type="radio" name="q17" value="1"></li>
	        <li class="likert-item"><input type="radio" name="q17" value="2"></li>
	        <li class="likert-item"><input type="radio" name="q17" value="3"></li>
	        <li class="likert-item"><input type="radio" name="q17" value="4"></li>
	        <li class="likert-item"><input type="radio" name="q17" value="5"> 非常符合</li>
	    </ul>
	</div>
	
	<input type="submit" value='填寫完畢'>
	__end__
	set description "Embeds custom HTML"

define notepad getting_started
	__note__
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	__end__
	set description "A simple notepad to document your experiment. This plug-in does nothing."

define inline_html improve_survey_html
	__html__
	<style>
	  .question {
	    margin-bottom: 1em;
	  }
	  .likert-scale {
	    display: flex;
	    justify-content: space-between;
	    list-style-type: none;
	    padding: 0;
	  }
	  .likert-item {
	    text-align: center;
	  }
	</style>
	
	<div id="question-container"></div>
	<button id="next-button" disabled>Next</button>
	
	<script>
	  const questions = [
	    { text: "我比較喜歡複雜而不喜歡簡單的問題。", reverse: false },
	    { text: "我願意負責解決要花很多腦筋的事。", reverse: false },
	    { text: "我不以思考為樂。", reverse: true },
	    { text: "我比較喜歡去做不用思考的事,而不願去做需要思考的事。", reverse: true },
	    { text: "我對那些要花很多心思去想事情的情境,避之唯恐不及。", reverse: true },
	    { text: "我從深思和長考中得到滿足。", reverse: false },
	    { text: "我不費心去多想。", reverse: true },
	    { text: "與其去想一些長期計劃,我寧願想一些小的日常計劃。 ", reverse: true },
	    { text: "我喜歡那些一旦學會就不用再想的工作。", reverse: true },
	    { text: "靠著思考去往上爬的想法正合我意。", reverse: false },
	    { text: "我喜歡那些需要想出新的方法來解決問題的工作。", reverse: false },
	    { text: "學習新的思考方式沒有甚麼意思。", reverse: true },
	    { text: "我願我這一生充滿著我必須解決的難題。", reverse: false },
	    { text: "我喜歡抽象地思考。", reverse: false },
	    { text: "我喜歡需要動腦筋且困難的重要工作,而不喜歡還算重要但不需多想的工作。", reverse: false },
	    { text: "當我完成一件很費心力的工作後,我感到的是解脫而不是滿足。", reverse: true },
	    { text: "我只在乎工作是否完成,我不在意 它是如何或爲何做成的。", reverse: true },
	    { text: "即使一些事務跟我個人沒有切身關係,我常會去對它們深思熟慮一番。", reverse: false }
	  ];
	
	  let currentQuestionIndex = 0;
	  let responses = [];
	  let randomizedQuestions = [];
	
	  function shuffle(array) {
	    for (let i = array.length - 1; i > 0; i--) {
	      const j = Math.floor(Math.random() * (i + 1));
	      [array[i], array[j]] = [array[j], array[i]];
	    }
	  }
	
	  function showQuestion() {
	    const questionContainer = document.getElementById('question-container');
	    const question = randomizedQuestions[currentQuestionIndex];
	    questionContainer.innerHTML = `
	      <div class="question">
	        <p>${currentQuestionIndex + 1}. ${question.text}</p>
	        <ul class="likert-scale">
	          <li class="likert-item"><input type="radio" name="q" value="0" required> 非常不符合</li>
	          <li class="likert-item"><input type="radio" name="q" value="1"></li>
	          <li class="likert-item"><input type="radio" name="q" value="2"></li>
	          <li class="likert-item"><input type="radio" name="q" value="3"></li>
	          <li class="likert-item"><input type="radio" name="q" value="4"></li>
	          <li class="likert-item"><input type="radio" name="q" value="5"> 非常符合</li>
	        </ul>
	      </div>
	    `;
	    const nextButton = document.getElementById('next-button');
	    nextButton.disabled = true;
	    const radioButtons = document.querySelectorAll('input[name="q"]');
	    radioButtons.forEach(button => {
	      button.addEventListener('change', () => {
	        nextButton.disabled = false;
	      });
	    });
	  }
	
	  function nextQuestion() {
	    const selectedValue = document.querySelector('input[name="q"]:checked');
	    if (selectedValue) {
	      let score = parseInt(selectedValue.value);
	      if (randomizedQuestions[currentQuestionIndex].reverse) {
	        score = 5 - score;
	      }
	      responses.push({
	        question: randomizedQuestions[currentQuestionIndex].text,
	        score: score
	      });
	      currentQuestionIndex++;
	      if (currentQuestionIndex < randomizedQuestions.length) {
	        showQuestion();
	      } else {
	        showTotalScore();
	      }
	    }
	  }
	
	  function showTotalScore() {
	    const container = document.getElementById('question-container');
	    const totalScore = responses.reduce((acc, curr) => acc + curr.score, 0);
	    container.innerHTML = `
	      <h2>問卷完成</h2>
	      <p>您的總分是：${totalScore}</p>
	    `;
	    document.getElementById('next-button').style.display = 'none';
	    jatos.appendResultData({ nfc_score: totalScore, responses: responses });
	    setTimeout(() => {
	      jatos.startNextComponent();
	    }, 2000);
	  }
	
	  randomizedQuestions = [...questions];
	  shuffle(randomizedQuestions);
	  showQuestion();
	  const nextButton = document.getElementById('next-button');
	  nextButton.addEventListener('click', nextQuestion);
	</script>
	__end__
	set description "Embeds custom HTML"

define inline_javascript new_inline_javascript
	set description "Executes JavaScript"
	___run__
	<!DOCTYPE html>
	<html>
	<head>
	<title>Need for Cognition Scale</title>
	<style>
	  body {
	    font-family: sans-serif;
	  }
	  .question {
	    margin-bottom: 1em;
	  }
	  .likert-scale {
	    display: flex;
	    justify-content: space-between;
	    list-style-type: none;
	    padding: 0;
	  }
	  .likert-item {
	    text-align: center;
	  }
	</style>
	</head>
	<body>
	
	<h1>Need for Cognition Scale</h1>
	
	<div id="questions-container"></div>
	
	<button id="submit-button">Submit</button>
	
	<script>
	  // Function to parse the data from OS.txt
	  async function parseOSData() {
	    const response = await fetch('OS.txt');
	    const text = await response.text();
	    const lines = text.split('\n');
	    const questions = [];
	    for (let i = 0; i < lines.length; i++) {
	      const line = lines[i];
	      if (line.startsWith('setcycle')) {
	        const parts = line.split(' ');
	        const cycle = parseInt(parts[1]);
	        const key = parts[2];
	        const value = parts.slice(3).join(' ').replace(/"/g, '');
	        if (key === 'Question') {
	          if (!questions[cycle]) {
	            questions[cycle] = {};
	          }
	          questions[cycle].question = value;
	        } else if (key === 'score') {
	          if (!questions[cycle]) {
	            questions[cycle] = {};
	          }
	          questions[cycle].score = value;
	        }
	      }
	    }
	    return questions;
	  }
	
	  // Function to generate the HTML for the questions
	  function generateQuestionsHTML(questions) {
	    const container = document.getElementById('questions-container');
	    for (let i = 0; i < questions.length; i++) {
	      const question = questions[i];
	      if (question) {
	        const questionDiv = document.createElement('div');
	        questionDiv.classList.add('question');
	        questionDiv.innerHTML = "`
	          <p>${i + 1}. ${question.question}</p>
	          <ul class=\"likert-scale\">
	            <li class=\"likert-item\"><input type=\"radio\" name=\"q${i}\" value=\"0\"> Very Inaccurate</li>
	            <li class=\"likert-item\"><input type=\"radio\" name=\"q${i}\" value=\"1\"></li>
	            <li class=\"likert-item\"><input type=\"radio\" name=\"q${i}\" value=\"2\"></li>
	            <li class=\"likert-item\"><input type=\"radio\" name=\"q${i}\" value=\"3\"></li>
	            <li class=\"likert-item\"><input type=\"radio\" name=\"q${i}\" value=\"4\"></li>
	            <li class=\"likert-item\"><input type=\"radio\" name=\"q${i}\" value=\"5\"> Very Accurate</li>
	          </ul>
	        ";
	        container.appendChild(questionDiv);
	      }
	    }
	  }
	
	  // Function to calculate the score
	  function calculateScore(questions) {
	    let totalScore = 0;
	    for (let i = 0; i < questions.length; i++) {
	      const question = questions[i];
	      if (question) {
	        const selectedValue = document.querySelector(`input[name="q${i}"]:checked`);
	        if (selectedValue) {
	          let score = parseInt(selectedValue.value);
	          if (question.score === 'r') {
	            score = 5 - score;
	          }
	          totalScore += score;
	        }
	      }
	    }
	    return totalScore;
	  }
	
	  // Main function
	  async function main() {
	    const questions = await parseOSData();
	    generateQuestionsHTML(questions);
	
	    const submitButton = document.getElementById('submit-button');
	    submitButton.addEventListener('click', () => {
	      const totalScore = calculateScore(questions);
	      // Save the score to JATOS
	      // jatos.appendResultData(totalScore);
	      alert(`Your score is: ${totalScore}`);
	    });
	  }
	
	  main();
	</script>
	
	</body>
	</html>
	__end__
	set _prepare ""

define sequence qeustion_seq
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run question_board_html True disabled
	run new_inline_javascript True

define inline_html question_board_html
	__html__
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	__end__
	set description "Embeds custom HTML"

define sequence survey
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run getting_started True
	run welcome True
	run basic_survey_html True disabled
	run improve_survey_html True
	run survey_logger True
	run End True

define logger survey_logger
	set description "Logs experimental data"
	set auto_log yes

define sequence survey_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"

define sketchpad welcome
	set start_response_interval no
	set reset_variables no
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=32 html=yes show_if=True text="<i>認知需求量表</i><br><br><br>請按空白鍵繼續" x=0 y=0 z_index=0

