---
API: 3
OpenSesame: 4.1.0
Platform: nt
---
set width 1024
set title "Need for Cognition"
set subject_parity even
set subject_nr 0
set start main
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend osweb
set round_decimals 2
set mouse_backend osweb
set keyboard_backend osweb
set jatos_uuid "717fd569-ff1f-11ee-f23c-c2ac199fa56c"
set jatos_end_redirect_url "https://jatos.mindprobe.eu/"
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic False
set font_family mono
set font_bold False
set experiment_path "D:/core/research/projects/Scripts_Factory/2_Packaging/survey_packing"
set disable_garbage_collection False
set description "The main experiment item"
set color_backend osweb
set clock_backend osweb
set canvas_backend osweb
set background "#3d3846"

define sketchpad End
	set start_response_interval no
	set reset_variables no
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=32 html=yes show_if=True text="<i>調查結束</i><br><br><br>請按空白鍵繼續" x=0 y=0 z_index=0

define inline_html basic_survey_html
	__html__
	<style>
	  .question {
	    margin-bottom: 1em;
	  }
	  .likert-scale {
	    display: flex;
	    justify-content: space-between;
	    list-style-type: none;
	    padding: 0;
	  }
	  .likert-item {
	    text-align: center;
	  }
	</style>
	
	<div class="question">
	    <p>1. 我比較喜歡複雜而不喜歡簡單的問題。</p>
	    <ul class="likert-scale">
	        <li class="likert-item"><input type="radio" name="q0" value="0" required> 非常不符合</li>
	        <li class="likert-item"><input type="radio" name="q0" value="1"></li>
	        <li class="likert-item"><input type="radio" name="q0" value="2"></li>
	        <li class="likert-item"><input type="radio" name="q0" value="3"></li>
	        <li class="likert-item"><input type="radio" name="q0" value="4"></li>
	        <li class="likert-item"><input type="radio" name="q0" value="5"> 非常符合</li>
	    </ul>
	</div>
	<div class="question">
	    <p>2. 我願意負責解決要花很多腦筋的事。</p>
	    <ul class="likert-scale">
	        <li class="likert-item"><input type="radio" name="q1" value="0" required> 非常不符合</li>
	        <li class="likert-item"><input type="radio" name="q1" value="1"></li>
	        <li class="likert-item"><input type="radio" name="q1" value="2"></li>
	        <li class="likert-item"><input type="radio" name="q1" value="3"></li>
	        <li class="likert-item"><input type="radio" name="q1" value="4"></li>
	        <li class="likert-item"><input type="radio" name="q1" value="5"> 非常符合</li>
	    </ul>
	</div>
	<div class="question">
	    <p>3. 我不以思考為樂。</p>
	    <ul class="likert-scale">
	        <li class="likert-item"><input type="radio" name="q2" value="0" required> 非常不符合</li>
	        <li class="likert-item"><input type="radio" name="q2" value="1"></li>
	        <li class="likert-item"><input type="radio" name="q2" value="2"></li>
	        <li class="likert-item"><input type="radio" name="q2" value="3"></li>
	        <li class="likert-item"><input type="radio" name="q2" value="4"></li>
	        <li class="likert-item"><input type="radio" name="q2" value="5"> 非常符合</li>
	    </ul>
	</div>
	<div class="question">
	    <p>4. 我比較喜歡去做不用思考的事,而不願去做需要思考的事。</p>
	    <ul class="likert-scale">
	        <li class="likert-item"><input type="radio" name="q3" value="0" required> 非常不符合</li>
	        <li class="likert-item"><input type="radio" name="q3" value="1"></li>
	        <li class="likert-item"><input type="radio" name="q3" value="2"></li>
	        <li class="likert-item"><input type="radio" name="q3" value="3"></li>
	        <li class="likert-item"><input type="radio" name="q3" value="4"></li>
	        <li class="likert-item"><input type="radio" name="q3" value="5"> 非常符合</li>
	    </ul>
	</div>
	<div class="question">
	    <p>5. 我對那些要花很多心思去想事情的情境,避之唯恐不及。</p>
	    <ul class="likert-scale">
	        <li class="likert-item"><input type="radio" name="q4" value="0" required> 非常不符合</li>
	        <li class="likert-item"><input type="radio" name="q4" value="1"></li>
	        <li class="likert-item"><input type="radio" name="q4" value="2"></li>
	        <li class="likert-item"><input type="radio" name="q4" value="3"></li>
	        <li class="likert-item"><input type="radio" name="q4" value="4"></li>
	        <li class="likert-item"><input type="radio" name="q4" value="5"> 非常符合</li>
	    </ul>
	</div>
	<div class="question">
	    <p>6. 我從深思和長考中得到滿足。</p>
	    <ul class="likert-scale">
	        <li class="likert-item"><input type="radio" name="q5" value="0" required> 非常不符合</li>
	        <li class="likert-item"><input type="radio" name="q5" value="1"></li>
	        <li class="likert-item"><input type="radio" name="q5" value="2"></li>
	        <li class="likert-item"><input type="radio" name="q5" value="3"></li>
	        <li class="likert-item"><input type="radio" name="q5" value="4"></li>
	        <li class="likert-item"><input type="radio" name="q5" value="5"> 非常符合</li>
	    </ul>
	</div>
	<div class="question">
	    <p>7. 我不費心去多想。</p>
	    <ul class="likert-scale">
	        <li class="likert-item"><input type="radio" name="q6" value="0" required> 非常不符合</li>
	        <li class="likert-item"><input type="radio" name="q6" value="1"></li>
	        <li class="likert-item"><input type="radio" name="q6" value="2"></li>
	        <li class="likert-item"><input type="radio" name="q6" value="3"></li>
	        <li class="likert-item"><input type="radio" name="q6" value="4"></li>
	        <li class="likert-item"><input type="radio" name="q6" value="5"> 非常符合</li>
	    </ul>
	</div>
	<div class="question">
	    <p>8. 與其去想一些長期計劃,我寧願想一些小的日常計劃。 </p>
	    <ul class="likert-scale">
	        <li class="likert-item"><input type="radio" name="q7" value="0" required> 非常不符合</li>
	        <li class="likert-item"><input type="radio" name="q7" value="1"></li>
	        <li class="likert-item"><input type="radio" name="q7" value="2"></li>
	        <li class="likert-item"><input type="radio" name="q7" value="3"></li>
	        <li class="likert-item"><input type="radio" name="q7" value="4"></li>
	        <li class="likert-item"><input type="radio" name="q7" value="5"> 非常符合</li>
	    </ul>
	</div>
	<div class="question">
	    <p>9. 我喜歡那些一旦學會就不用再想的工作。</p>
	    <ul class="likert-scale">
	        <li class="likert-item"><input type="radio" name="q8" value="0" required> 非常不符合</li>
	        <li class="likert-item"><input type="radio" name="q8" value="1"></li>
	        <li class="likert-item"><input type="radio" name="q8" value="2"></li>
	        <li class="likert-item"><input type="radio" name="q8" value="3"></li>
	        <li class="likert-item"><input type="radio" name="q8" value="4"></li>
	        <li class="likert-item"><input type="radio" name="q8" value="5"> 非常符合</li>
	    </ul>
	</div>
	<div class="question">
	    <p>10. 靠著思考去往上爬的想法正合我意。</p>
	    <ul class="likert-scale">
	        <li class="likert-item"><input type="radio" name="q9" value="0" required> 非常不符合</li>
	        <li class="likert-item"><input type="radio" name="q9" value="1"></li>
	        <li class="likert-item"><input type="radio" name="q9" value="2"></li>
	        <li class="likert-item"><input type="radio" name="q9" value="3"></li>
	        <li class="likert-item"><input type="radio" name="q9" value="4"></li>
	        <li class="likert-item"><input type="radio" name="q9" value="5"> 非常符合</li>
	    </ul>
	</div>
	<div class="question">
	    <p>11. 我喜歡那些需要想出新的方法來解決問題的工作。</p>
	    <ul class="likert-scale">
	        <li class="likert-item"><input type="radio" name="q10" value="0" required> 非常不符合</li>
	        <li class="likert-item"><input type="radio" name="q10" value="1"></li>
	        <li class="likert-item"><input type="radio" name="q10" value="2"></li>
	        <li class="likert-item"><input type="radio" name="q10" value="3"></li>
	        <li class="likert-item"><input type="radio" name="q10" value="4"></li>
	        <li class="likert-item"><input type="radio" name="q10" value="5"> 非常符合</li>
	    </ul>
	</div>
	<div class="question">
	    <p>12. 學習新的思考方式沒有甚麼意思。</p>
	    <ul class="likert-scale">
	        <li class="likert-item"><input type="radio" name="q11" value="0" required> 非常不符合</li>
	        <li class="likert-item"><input type="radio" name="q11" value="1"></li>
	        <li class="likert-item"><input type="radio" name="q11" value="2"></li>
	        <li class="likert-item"><input type="radio" name="q11" value="3"></li>
	        <li class="likert-item"><input type="radio" name="q11" value="4"></li>
	        <li class="likert-item"><input type="radio" name="q11" value="5"> 非常符合</li>
	    </ul>
	</div>
	<div class="question">
	    <p>13. 我願我這一生充滿著我必須解決的難題。</p>
	    <ul class="likert-scale">
	        <li class="likert-item"><input type="radio" name="q12" value="0" required> 非常不符合</li>
	        <li class="likert-item"><input type="radio" name="q12" value="1"></li>
	        <li class="likert-item"><input type="radio" name="q12" value="2"></li>
	        <li class="likert-item"><input type="radio" name="q12" value="3"></li>
	        <li class="likert-item"><input type="radio" name="q12" value="4"></li>
	        <li class="likert-item"><input type="radio" name="q12" value="5"> 非常符合</li>
	    </ul>
	</div>
	<div class="question">
	    <p>14. 我喜歡抽象地思考。</p>
	    <ul class="likert-scale">
	        <li class="likert-item"><input type="radio" name="q13" value="0" required> 非常不符合</li>
	        <li class="likert-item"><input type="radio" name="q13" value="1"></li>
	        <li class="likert-item"><input type="radio" name="q13" value="2"></li>
	        <li class="likert-item"><input type="radio" name="q13" value="3"></li>
	        <li class="likert-item"><input type="radio" name="q13" value="4"></li>
	        <li class="likert-item"><input type="radio" name="q13" value="5"> 非常符合</li>
	    </ul>
	</div>
	<div class="question">
	    <p>15. 我喜歡需要動腦筋且困難的重要工作,而不喜歡還算重要但不需多想的工作。</p>
	    <ul class="likert-scale">
	        <li class="likert-item"><input type="radio" name="q14" value="0" required> 非常不符合</li>
	        <li class="likert-item"><input type="radio" name="q14" value="1"></li>
	        <li class="likert-item"><input type="radio" name="q14" value="2"></li>
	        <li class="likert-item"><input type="radio" name="q14" value="3"></li>
	        <li class="likert-item"><input type="radio" name="q14" value="4"></li>
	        <li class="likert-item"><input type="radio" name="q14" value="5"> 非常符合</li>
	    </ul>
	</div>
	<div class="question">
	    <p>16. 當我完成一件很費心力的工作後,我感到的是解脫而不是滿足。</p>
	    <ul class="likert-scale">
	        <li class="likert-item"><input type="radio" name="q15" value="0" required> 非常不符合</li>
	        <li class="likert-item"><input type="radio" name="q15" value="1"></li>
	        <li class="likert-item"><input type="radio" name="q15" value="2"></li>
	        <li class="likert-item"><input type="radio" name="q15" value="3"></li>
	        <li class="likert-item"><input type="radio" name="q15" value="4"></li>
	        <li class="likert-item"><input type="radio" name="q15" value="5"> 非常符合</li>
	    </ul>
	</div>
	<div class="question">
	    <p>17. 我只在乎工作是否完成,我不在意 它是如何或爲何做成的。</p>
	    <ul class="likert-scale">
	        <li class="likert-item"><input type="radio" name="q16" value="0" required> 非常不符合</li>
	        <li class="likert-item"><input type="radio" name="q16" value="1"></li>
	        <li class="likert-item"><input type="radio" name="q16" value="2"></li>
	        <li class="likert-item"><input type="radio" name="q16" value="3"></li>
	        <li class="likert-item"><input type="radio" name="q16" value="4"></li>
	        <li class="likert-item"><input type="radio" name="q16" value="5"> 非常符合</li>
	    </ul>
	</div>
	<div class="question">
	    <p>18. 即使一些事務跟我個人沒有切身關係,我常會去對它們深思熟慮一番。</p>
	    <ul class="likert-scale">
	        <li class="likert-item"><input type="radio" name="q17" value="0" required> 非常不符合</li>
	        <li class="likert-item"><input type="radio" name="q17" value="1"></li>
	        <li class="likert-item"><input type="radio" name="q17" value="2"></li>
	        <li class="likert-item"><input type="radio" name="q17" value="3"></li>
	        <li class="likert-item"><input type="radio" name="q17" value="4"></li>
	        <li class="likert-item"><input type="radio" name="q17" value="5"> 非常符合</li>
	    </ul>
	</div>
	
	<input type="submit" value='填寫完畢'>
	__end__
	set description "Embeds custom HTML"

define inline_html consent_inline_html
	__html__
	<p align="left">
	您好：<br>
	歡迎您參加{{實驗室名稱}}{{實驗室主持人}}的{{研究計畫標題}}，這項研究的目的是探索華語母語者如何閱讀句子及辨識物件圖像。只要您是透過上架本次實驗的網站平台登入這個網頁，且未曾參與相同主題的實驗，就適合參與本次研究，無其它限制或配合事項。本次研究預計招募人數為{{sample size}}人。
	</p>
	<p align="left">
	實驗過程完全在自用個人電腦的網頁瀏覽器進行。過程是{{過程說明}}。只要您在精神良好的狀態下參與這項實驗，不會對您的身心健康構成任何已知風險，如果您突然感到不適或被嚴重干擾，覺得無法繼續實驗，直接關閉視窗即可停止。本研究依前述程序執行，過程中您的所在地點除可預期之不良事件外，若因參與本研究而發生不良事件或損害，由慈濟大學或計畫主持人依法負補償責任。
	</p>
	<p align="left">
	開始實驗後，您若對指示或刺激項目感到不理解，可隨時註記並於平台的回饋欄位內反應。如果您中途想要退出，直接關閉網頁即可，網站不會保留您的參與紀錄，亦不影響之後您參與我們其他研究的權益。過程中若因意外因素(如電腦當機、網路斷線)導致中斷，只要再次登入網頁重新開始即可。實驗完成時您將看到完成代碼，請正確記下並於平台指定欄位內回報，成功回報我們會向平台方確認核發報酬，再請您依平台網站指示領取及使用報酬點數100元。如果實驗中途中止或回報錯誤代碼，請恕我們無法核發報酬。實驗網站不會記錄任何可辨識您個人身分的必要訊息，未來本研究材料及去除您個人資訊的反應資料將以CC授權模式(姓名標示─非商業性)無限期公開於學術網路平台Open Science Framework，提供全球有興趣的各界人士自由檢索，以及依指定的CC授權模式使用。
	</p>
	<p align="left">
	您的參與將幫助我們增加理解{{研究主題普名}}，也可能啟發您對相關研究主題的興趣。按鍵確認同意參與後，個人資料保護法等法規保障依然有效。如果您需要留存參與紀錄，請務必注意登出畫面的資訊。若您對本研究還有進一步疑問，歡迎您隨時連絡計畫主持人{{PI contact info}}
	</p>
	<p align="left">
	註：本研究已經過{{IRB title}}審查通過。如果研究過程中有任何疑問，可以直接詢問研究人員，亦可與{{IRB title}}聯絡請求諮詢，其電話號碼為：{{IRB contact info}}。
	</p>
	
	<center>
	<table>
	  <tr>
	    <td>
	       <input type='radio' id="opt1" name="response" value='Y' required> 
	       <label>同意參與</label> 
	    </td> 
	    <td>
	    &nbsp;&nbsp;&nbsp;&nbsp;&nbsp;&nbsp;&nbsp;&nbsp;&nbsp;&nbsp;&nbsp; 
	    </td>
	    <td>
	       <input type='radio' id="opt2" name="response" value='N'>      
	       <label>不願意參與</label> 
	    </td>
	  </tr>
	</table>
	<input type="submit" value="點此繼續">
	</center>
	
	<script>
	
	
	</script>
	__end__
	set description "Embeds custom HTML"

define inline_html improve_survey_html
	__html__
	<style>
	  .question {
	    margin-bottom: 1em;
	  }
	  .likert-scale {
	    display: flex;
	    justify-content: space-between;
	    list-style-type: none;
	    padding: 0;
	  }
	  .likert-item {
	    text-align: center;
	  }
	</style>
	
	<div id="question-container"></div>
	<button id="next-button" disabled>下一題</button>
	
	<script>
	  const questions = [
	    { text: "我比較喜歡複雜而不喜歡簡單的問題。", reverse: false },
	    { text: "我願意負責解決要花很多腦筋的事。", reverse: false },
	    { text: "我不以思考為樂。", reverse: true },
	    { text: "我比較喜歡去做不用思考的事,而不願去做需要思考的事。", reverse: true },
	    { text: "我對那些要花很多心思去想事情的情境,避之唯恐不及。", reverse: true },
	    { text: "我從深思和長考中得到滿足。", reverse: false },
	    { text: "我不費心去多想。", reverse: true },
	    { text: "與其去想一些長期計劃,我寧願想一些小的日常計劃。 ", reverse: true },
	    { text: "我喜歡那些一旦學會就不用再想的工作。", reverse: true },
	    { text: "靠著思考去往上爬的想法正合我意。", reverse: false },
	    { text: "我喜歡那些需要想出新的方法來解決問題的工作。", reverse: false },
	    { text: "學習新的思考方式沒有甚麼意思。", reverse: true },
	    { text: "我願我這一生充滿著我必須解決的難題。", reverse: false },
	    { text: "我喜歡抽象地思考。", reverse: false },
	    { text: "我喜歡需要動腦筋且困難的重要工作,而不喜歡還算重要但不需多想的工作。", reverse: false },
	    { text: "當我完成一件很費心力的工作後,我感到的是解脫而不是滿足。", reverse: true },
	    { text: "我只在乎工作是否完成,我不在意 它是如何或爲何做成的。", reverse: true },
	    { text: "即使一些事務跟我個人沒有切身關係,我常會去對它們深思熟慮一番。", reverse: false }
	  ];
	
	  let currentQuestionIndex = 0;
	  let responses = [];
	  let randomizedQuestions = [];
	
	  function shuffle(array) {
	    for (let i = array.length - 1; i > 0; i--) {
	      const j = Math.floor(Math.random() * (i + 1));
	      [array[i], array[j]] = [array[j], array[i]];
	    }
	  }
	
	  function showQuestion() {
	    const questionContainer = document.getElementById('question-container');
	    const question = randomizedQuestions[currentQuestionIndex];
	    questionContainer.innerHTML = `
	      <div class="question">
	        <p>${currentQuestionIndex + 1}. ${question.text}</p>
	        <ul class="likert-scale">
	          <li class="likert-item"><input type="radio" name="q" value="0" required> 非常不符合</li>
	          <li class="likert-item"><input type="radio" name="q" value="1"></li>
	          <li class="likert-item"><input type="radio" name="q" value="2"></li>
	          <li class="likert-item"><input type="radio" name="q" value="3"></li>
	          <li class="likert-item"><input type="radio" name="q" value="4"></li>
	          <li class="likert-item"><input type="radio" name="q" value="5"> 非常符合</li>
	        </ul>
	      </div>
	    `;
	    const nextButton = document.getElementById('next-button');
	    nextButton.disabled = true;
	    const radioButtons = document.querySelectorAll('input[name="q"]');
	    radioButtons.forEach(button => {
	      button.addEventListener('change', () => {
	        nextButton.disabled = false;
	      });
	    });
	  }
	
	  function nextQuestion() {
	    const selectedValue = document.querySelector('input[name="q"]:checked');
	    if (selectedValue) {
	      let score = parseInt(selectedValue.value);
	      if (randomizedQuestions[currentQuestionIndex].reverse) {
	        score = 5 - score;
	      }
	      responses.push({
	        question: randomizedQuestions[currentQuestionIndex].text,
	        score: score
	      });
	      currentQuestionIndex++;
	      if (currentQuestionIndex < randomizedQuestions.length) {
	        showQuestion();
	      } else {
	        showTotalScore();
	      }
	    }
	  }
	
	  function showTotalScore() {
	    const container = document.getElementById('question-container');
	    const totalScore = responses.reduce((acc, curr) => acc + curr.score, 0);
	    container.innerHTML = `
	      <h2>問卷完成</h2>
	      <p>您的總分是：${totalScore}</p>
	    `;
	    document.getElementById('next-button').style.display = 'none';
	    jatos.appendResultData({ nfc_score: totalScore, responses: responses });
	    setTimeout(() => {
	      jatos.startNextComponent();
	    }, 2000);
	  }
	
	  randomizedQuestions = [...questions];
	  shuffle(randomizedQuestions);
	  showQuestion();
	  const nextButton = document.getElementById('next-button');
	  nextButton.addEventListener('click', nextQuestion);
	</script>
	__end__
	set description "Embeds custom HTML"

define sequence main
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run consent_inline_html True
	run survey "response == \"opt1\""
	run End True

define sequence survey
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run welcome True
	run basic_survey_html False disabled
	run improve_survey_html True
	run survey_logger True

define logger survey_logger
	set description "Logs experimental data"
	set auto_log yes

define sketchpad welcome
	set start_response_interval no
	set reset_variables no
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=32 html=yes show_if=True text="<i>認知需求量表</i><br><br><br>請按空白鍵繼續" x=0 y=0 z_index=0

